PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = classical-music
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent classical_style_music
      sound = simuli/Dee Yan-Key - Andantino cantabile.ogg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    EmotivMarkingComponent eeg_marker
      durationEstim = 0.01
      emotiv_marker_label = label
      emotiv_marker_value = 1
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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    EmotivRecordingComponent cortex_rec
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
Flow
  Routine trial
